PsychoPy2experiment version="2022.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001', 'order': "['B','D', 'A', 'C']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = wm
  keyboardBackend = ioHub
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Routines
  Routine template
    ImageComponent listImage
      disabled = True
      image = image/shopList.png
      pos = (-0.4, 0.15)
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    CodeComponent drawShopStim
      Code Type = Py
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      Begin Experiment:
        listimage2 = visual.ImageStim(
            win=win,
            name="list",
            image="image\shopList.png",
            mask=None, anchor='center',ori=0.0,
            pos=(-0.4, 0.15),
            size=((0.7, 0.7)),
            color="burlywood", colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=0.0)
      Begin Routine:
        if oneTrial.finished:
            continueRoutine = False

        listimage2.setAutoDraw(True)

        for image in shopImages:
           image.setAutoDraw(True)

        win.getMovieFrame()
      End Routine:
        for image in shopImages:
            image.setAutoDraw(False)

        listimage2.setAutoDraw(False)

        oneTrial.addData("templateTime", t);
        oneTrial.addData("templateFrame", frameN);

        win.saveMovieFrames("list.png")
    ImageComponent goRight
      image = image/right.jpg
      pos = (0, 0.1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent goRightMouse
      clickable = goRight
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent endList
      Code Type = Auto->JS
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      Each Frame:
        if  goRight.contains(goRightMouse):
            continueRoutine = False
    ImageComponent clock
      image = image/clock.png
      pos = (0.6, 0.4)
      size = (0.1, 0.1)
      startVal [time (s)] = 30.0
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  Routine working
    ImageComponent shoppingbasket
      image = image/basket.png
      pos = (0.28, -0.42)
      size = (0.5, 0.14)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf5_1_2
      image = image/shelf1.png
      pos = (0.475, 0.32)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf5_1_1
      image = image/shelf1.png
      pos = (0.16, 0.32)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf1_1_1
      image = image/shelf1.png
      pos = (0.16, 0.19)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf1_1_2
      image = image/shelf1.png
      pos = (0.475, 0.19)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf2_1_1
      image = image/shelf1.png
      pos = (0.16, 0.06)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf2_1_2
      image = image/shelf1.png
      pos = (0.475, 0.06)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf3_1_1
      image = image/shelf1.png
      pos = (0.16, -.07)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf3_1_2
      image = image/shelf1.png
      pos = (0.475, -.07)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf4_1_1
      image = image/shelf1.png
      pos = (0.16, -.2)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf4_1_2
      image = image/shelf1.png
      pos = (0.475, -.2)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent shelf1
      disabled = True
      image = image/shelf.png
      pos = (0.42, 0.27)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent shelf2
      disabled = True
      image = image/shelf.png
      pos = (0.42, 0.12)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent shelf3
      disabled = True
      image = image/shelf.png
      pos = (0.42, -0.03)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent shelf4
      disabled = True
      image = image/shelf.png
      pos = (0.42, -0.18)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent shopper
      image [set every repeat] = $shopperImage
      pos [set every repeat] = (shopperPosX, shopperPosY)
      size [set every repeat] = (shopperSizeW, shopperSizeH)
      startVal [time (s)] = 0.0
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    ImageComponent kid
      image = image/kidSmall.png
      pos = (0.01, -0.42)
      size = (0.05, 0.11)
      startVal [time (s)] = 0.0
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    MouseComponent shopperMouse
      clickable = shopper
      disabled = True
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent drawShelfStim
      Code Type = Auto->JS
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      Begin Routine:
        for image in productImages:
            image.setAutoDraw(True)

        win.getMovieFrame()
      End Routine:
        for image in productImages:
            image.setAutoDraw(False)

        win.saveMovieFrames("shelf.png")
    CodeComponent drawStar
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        for star in stars:
            star.setAutoDraw(True)
      End Routine:
        for star in stars:
            star.setAutoDraw(False)
    MouseComponent imageMouse
      clickable = shopper
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ButtonComponent endTrialButton
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      callback = oneTrial.finished=True
      color = black
      disabled = True
      fillColor = 0.0902, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.035
      pos = (-0.6, -0.45)
      size = (0.16, 0.1)
      startVal [time (s)] = 0
      text = Done  shoping
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    CodeComponent clickResponse
      Code Type = Py
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      Begin Experiment:
        def copyImage(image, pos, name, size):
            return visual.ImageStim(win,
                name=name, image=image.image, mask=image.mask,
                anchor=image.anchor, ori = image.ori, size=size,
                pos=pos,color=image.color, colorSpace=image.colorSpace,
                opacity=image.opacity,flipHoriz=image.flipHoriz,
                flipVert=image.flipVert,texRes=image.texRes,
                interpolate=image.interpolate, depth=image.depth)



        def drawClicked(clicked):
            for each in clicked:
                each.draw()

        starsPosX = [0.12,0.18,0.24,0.30,0.36,0.42,0.48,0.54,0.60,0.66,
        0.12,0.18,0.24,0.30,0.36,0.42,0.48,0.54,0.60,0.66]
        starsPosY = [0.46,0.46,0.46,0.46,0.46,0.46,0.46,0.46,0.46,0.46,
        0.41,0.41,0.41,0.41,0.41,0.41,0.41,0.41,0.41,0.41]


        def makeStars(starCounts,starsPosX,starsPosY):
            stars=[]
            for i in range(starCounts):
                star = visual.ShapeStim(
                win=win, name='polygon', vertices='star7',
                size=(0.05, 0.05),ori=0.0,
                pos=(starsPosX[i], starsPosY[i]),
                anchor='center',lineWidth=1.0,
                colorSpace='rgb',  lineColor='gold',
                fillColor='yellow',opacity=None, depth=-4.0,
                interpolate=True)
                stars.append(star)
            return stars



        def drawStars(stars):
            for each in stars:
                each.draw()


        #NEW
        def makeGrey(item):
            for image in item:
                image.opacity = 0.5

        def makeWhite(item):
            for image in item:
                image.opacity = 1.0

        def makeInvisible(item):
            for image in item:
                image.opacity = 0.0


        closingSign = visual.ImageStim(
            win=win,
            name="closingSign",
            image="closing.png",
            mask=None, anchor='center',ori=0.0,
            pos=(-0.4, 0.1),
            size=((0.2, 0.2)), colorSpace='rgb', opacity=None,
            flipHoriz=False, flipVert=False,
            texRes=128.0, interpolate=True, depth=0.0)
      Begin Routine:
        #Trying to make items clickable again after list trip
        clickables = productImages.copy()
        for clickable in clickables:
            makeWhite([clickable])

        imageMouse.setPos(newPos = (-0.5,0.4))
        # may a list to store the images they click


        # clikedImages is the imageStim object, clickedImageName is the corresponding
        # name. This is the final list. allClickedImageName are all the product they
        # ever clicked, including those put into the cart but remove later, the clicked
        # back is remomved for now,so remove the variable for now 04/2022
        clickedImages = []
        clickedImagesPair = []
        clickedImagesName=[]
        clickedImagesTime=[]
        correctClickedsName=[]
        correctClickedsTime=[]
        # allClickedImagesName=[]
        clickedImage = None
        curIncorrectCount=0
        curCorrectCount=0
        curStarCount=starCounts

        #for item in clickedImages:
        #        pair_label = item.pair
        #        clickables = [item for item in clickables if item.pair != pair_label]




        cartPosX = [0.10,0.19,0.28,0.37,0.46,
        0.10,0.19,0.28,0.37,0.46,
        0.10,0.19,0.28,0.37,0.46,
        0.10,0.19,0.28,0.37,0.46,]
        cartPosY = [-0.34,-0.34,-0.34,-0.34,-0.34,
        -0.42,-0.42,-0.42,-0.42,-0.42,
        -0.34,-0.34,-0.34,-0.34,-0.34,
        -0.42,-0.42,-0.42,-0.42,-0.42]
      Each Frame:
        #collect the cliked image and make the copy and calculat the correct and incorrect clicked
        #here the logic is that if the mouse is press (new or lingeringone) in any clickable,
        #it break the for loop. And if all the clickable is not click, then clear out the clickedImage.
        #So it prevent it from collect the same click across frames.


        for clickable in clickables:
            if clickable.contains(imageMouse):
                clickables.remove(clickable)
                makeGrey([clickable])
                clickedImagesPair.append(clickable.pair)
                pair_label = clickable.pair
                same_pair_items = [item for item in clickables if item.pair == pair_label]
                makeGrey(same_pair_items)
                clickables = [item for item in clickables if item.pair != pair_label]



        #     if imageMouse.isPressedIn(clickable):
                if clickedImage == None:
                    clickedImage = copyImage(clickable,
                                (cartPosX[0],cartPosY[0]),
                                clickable.name,0.07)
                    clickedImages.append(clickedImage)

                    # clickedImagesName are the images that art in the basket, if inclued
                    # ones the clied on the selved and remove those click back, the click back
                    # function is disable currently 04/2022
                    clickedImagesName.append(clickedImage.name)
                    clickedImagesTime.append(t)
                    # allClickedImagesName.append(clickedImage.name)
                    cartPosX.pop(0)
                    cartPosY.pop(0)
                    #this is to collect the correct and incorrect response and mark the correct on the template
                    if clickable.name in curCorrectImages:
                        correctSound.stop()
                        wrongSound.stop()
                        correctSound.play()
                        correctClickedsName.append(clickable.name)
                        correctClickedsTime.append(t)
                        correctCount +=1
                        # print(correctCount)
                        curCorrectCount +=1
                        # remove the already clicked correct image so it can't be count as two correct
                        curCorrectImages.remove(clickable.name)
                        shopImages[correctImages.index(clickable.name)].mask='image\cross.jpg'
                    else:
                        correctSound.stop()
                        wrongSound.stop()
                        wrongSound.play()
                        incorrectCount +=1
                        curIncorrectCount +=1
                    #this is to count the stars
                    if starCounts+curCorrectCount-curIncorrectCount<0:
                        curStarCount = 0
                        starCounts = 0
                        curIncorrectCount = 0
                        curCorrectCount =0
                    else:
                        curStarCount = starCounts+curCorrectCount-curIncorrectCount
                    #this line reset the mouse pos so it is not stay in the same place
                    imageMouse.setPos(newPos=(-0.5,0.4))
                    break
                else:
                    #this line reset the mouse pos so it is not stay in the same place
                    imageMouse.setPos(newPos=(-0.5,0.4))
                    break
        else:
            if clickedImage is not None:
                clickedImage = None


                clickedImage = None






        ## prevent the mouse collecting the same click accross frames
        #if clickedImage is not None and imageMouse.getPressed()[0] == 0:
        #    clickedImage = None

        ##remove image from the cart if it is clicked and also free up the space
        #for cartIndex, cartImage in enumerate(clickedImages):
        ##    if  clickImage.contains(imageMouse):
        #     if imageMouse.isPressedIn(cartImage):
        #        cartPosX.insert(0,cartImage.pos[0])
        #        cartPosY.insert(0,cartImage.pos[1])
        #        clickedImages.pop(cartIndex)
        #        clickedImagesName.remove(cartImage.name)

        drawClicked(clickedImages)
        stars=makeStars(curStarCount,starsPosX,starsPosY)
        drawStars(stars)

        #NEW code below and commented out old code
        if correctCount >= 6 and shopper.contains(imageMouse) and closing == 0:
            continueRoutine = False
            delayDuration = 0
            oneTrial.finished = True
        #if correctCount >=6:
        #    continueRoutine = False
        #    delayDuration =0
        #    oneTrial.finished=True
        #NEW code below
        #if not clickables:
        #    oneTrial.finished=True

        if  shopper.contains(imageMouse) and closing == 0:
            continueRoutine = False

        if closing == 1 and not clickables:
            continueRoutine = False
            closingSign.setAutoDraw(False)

        if  shopper.contains(imageMouse) and closing == 1:
            closingSign.setAutoDraw(True)
      End Routine:
        oneTrial.addData("nCorrect", correctCount);
        oneTrial.addData("nIncorrect", incorrectCount);
        oneTrial.addData("clickedImages", clickedImagesName);
        oneTrial.addData("whichPair", clickedImagesPair);
        oneTrial.addData("clickedImagesTime", clickedImagesTime);
        # no click back function, no need for allClickedImages
        # oneTrial.addData("alLClickedImages", allClickedImagesName);
        oneTrial.addData("correctClickedsName",correctClickedsName)
        oneTrial.addData("correctClickedsTime",correctClickedsTime)
        oneTrial.addData("correctImages",correctImages);
        oneTrial.addData("curCorrectImages",curCorrectImages)
        oneTrial.addData("workingTime", t);
        oneTrial.addData("workingFrame", frameN);
        starCounts=curStarCount
  Routine mask
    TextComponent maskText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delayDuration
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    ImageComponent walkingShopper
      image = image/walkShopper.png
      pos [set every frame] = (-0.65+0.5*t/delayDuration, -0.4)
      size = (0.19, 0.17)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delayDuration
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    ImageComponent kid2
      image = image/kidSmall.png
      pos = (0.01, -0.42)
      size = (0.05, 0.11)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $delayDuration
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  Routine initializeNewTrial
    CodeComponent initializeTrialList
      Code Type = Auto->JS
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      Begin Routine:
        randProdList = allList[listNum].copy()
        shuffle(randProdList)#Why is this being shuffled? The rows in the csv file are in an arbitrary order aren't they?
        import random
        #NEW
        #pair_values = list(set(object['pair'] for object in randProdList if 'pair' in object))

        selected_items = {}
        for pair_label in ['A', 'B', 'C', 'D', 'E', 'F','G','H','I', 'J']:

            items_in_pair = [object for object in randProdList if object['pair'] == pair_label]

            if items_in_pair:
                selected_item = random.choice(items_in_pair)
                selected_items[pair_label] = selected_item

        shopList = list(selected_items.values())

        #shopList = randProdList[0:10]
        correctImages=[object['imageName'] for object in shopList]
        #create a list of running correct images so clicking the same image twice won't cout as two correct
        curCorrectImages = correctImages.copy()
        correctCount =0
        incorrectCount =0
        starCounts = 1
    CodeComponent makeShopStim
      Code Type = Auto->JS
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      Begin Experiment:
        # shopPos mean the postion of the list
        shopPosX = [-0.27,-0.39,-0.51,-0.27,-0.39,-0.51,
        -0.27,-0.39,-0.51,-0.51]
        shopPosY = [0.34,0.34,0.34,0.21,0.21,0.21,
        0.08,0.08,0.08,-0.05]
      Begin Routine:
        shopImages = []
        for i in range(10):
            myImage = visual.ImageStim(
                win=win,
                name=shopList[i]['imageName'],
                image=shopList[i]['animalImage'],
                mask=None, anchor='center',ori=0.0,
                pos=(shopPosX[i], shopPosY[i]),
                size=(0.1, 0.1),
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0)
            shopImages.append(myImage)
    CodeComponent makeShelfStim
      Code Type = Auto->JS
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      Begin Routine:
        # I move this to begin Experiment since the shelves fixed
        # If we want to chagne it each trial, more to Begin Routine
        productImages = []

        for count, curImage in enumerate(allList[listNum]):
            image = visual.ImageStim(
            #globals()['image'+str(count+1)] = visual.ImageStim(
                win=win,
                name=curImage['imageName'],
                image=curImage['animalImage'],
                mask=None, anchor='center',ori=0.0,
                pos=(curImage['PositionX'], curImage['PositionY']),
                size=(0.1, 0.1),
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0)
            image.pair = curImage['pair']
            variable_name = 'image' + str(count + 1)
            globals()[variable_name] = image
            #productImages.append(eval('image'+str(count+1))
            productImages.append(image)

        clickables = productImages.copy() #Added here
  Routine loading
    CodeComponent loadList
      Code Type = Py
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      Begin Experiment:
        #productList is the products on the shelf
        #have to load the lish here separately othewise
        #the repeat time of the loop = the number of row
        # stop using load becasue I need it to be loaded at the begining of the exepriment4/9/2022
        productList1 = data.importConditions("productList1.csv")
        productList2 = data.importConditions("productList2.csv")
        productList3 = data.importConditions("productList3.csv")
        allList = [productList1,productList2,productList3]
        shuffle(allList)
        #productList = data.importConditions('animalList.csv')
        totalStars = 0
        correctSound = sound.Sound('sound\correctPick.wav')
        wrongSound = sound.Sound('sound\wrongPick.wav')
    ImageComponent adultAndKid
      image = image/adultAndKid.jpg
      size = (0.13, 0.22)
      startVal [time (s)] = 0.0
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    KeyboardComponent endFirstLine
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine separateMask
    TextComponent text
      durationEstim = 0.02
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [frame N] = 1
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      text:
        Any text

        including line breaks
  Routine blockBegin
    TextComponent blockBeginMsg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockMsg
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    KeyboardComponent endBlockMsg
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine trialBegin
    TextComponent trialMessage
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $delayMessage
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    ImageComponent storeImages
      image [set every repeat] = $storeImage
      size [set every repeat] = (storeSizeW, storeSizeH)
      startVal [time (s)] = 0.0
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    KeyboardComponent storeImageEnd
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
    TextComponent NextToYou
      letterHeight = 0.05
      pos = (0, 0.17)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Next to you
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    ImageComponent InstruStore
      image = image/store.jpg
      pos = (0, 0.34)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent InstruMarket
      image = image/superMarket.jpg
      pos = (0, -0.2)
      size = (1.3, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent takeTime
      letterHeight = 0.05
      pos = (0, -0.44)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Take Some time
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    KeyboardComponent endInstruc
      allowedKeys = 'q'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine introShopping
    ImageComponent listImage_2
      image = image/shopList.png
      pos = (-0.4, 0.15)
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent shoppingbasket_2
      image = image/basket.png
      pos = (0.28, -0.42)
      size = (0.5, 0.14)
      startVal [time (s)] = 0.0
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    ImageComponent shelf1_2
      image = image/shelf.png
      pos = (0.42, 0.27)
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent shelf2_2
      image = image/shelf.png
      pos = (0.42, 0.12)
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent shelf3_2
      image = image/shelf.png
      pos = (0.42, -0.03)
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent shelf4_2
      image = image/shelf.png
      pos = (0.42, -0.18)
      saveStartStop = False
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent ShopStim
      Code Type = Py
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      Begin Routine:
        # Initialize the temp shoplist
        shopList = productList[0:10]
        correctImages=[object['imageName'] for object in shopList]
        curCorrectImages = correctImages.copy()
        correctCount =0
        incorrectCount =0
        starCounts = 0

        shopImages = []
        for i in range(10):
            myImage = visual.ImageStim(
                win=win,
                name=shopList[i]['imageName'],
                image=shopList[i]['animalImage'],
                mask=None, anchor='center',ori=0.0,
                pos=(shopPosX[i], shopPosY[i]),
                size=(0.1, 0.1),
                color=[1,1,1], colorSpace='rgb', opacity=None,
                flipHoriz=False, flipVert=False,
                texRes=128.0, interpolate=True, depth=0.0)
            shopImages.append(myImage)

        for image in shopImages:
            image.setAutoDraw(True)
      End Routine:
        for image in shopImages:
            image.setAutoDraw(False)
    CodeComponent ShelfStim
      Code Type = Auto->JS
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      Begin Routine:
        for image in productImages:
            image.setAutoDraw(True)
      End Routine:
        for image in productImages:
            image.setAutoDraw(False)
    MouseComponent imageMouse2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    CodeComponent clickResponse2
      Code Type = Py
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      Begin Experiment:
        #def copyImage(image, pos, name, size):
        #    return visual.ImageStim(win,
        #        name=name, image=image.image, mask=image.mask,
        #        anchor=image.anchor, ori = image.ori, size=size,
        #        pos=pos,color=image.color, colorSpace=image.colorSpace,
        #        opacity=image.opacity,flipHoriz=image.flipHoriz,
        #        flipVert=image.flipVert,texRes=image.texRes,
        #        interpolate=image.interpolate, depth=image.depth)
        #
        #
        #
        #def drawClicked(clicked):
        #    for each in clicked:
        #        each.draw()
        #
        #starsPosX = [0.12,0.18,0.24,0.30,0.36,0.42,0.48,0.54,0.60,0.66,
        #0.12,0.18,0.24,0.30,0.36,0.42,0.48,0.54,0.60,0.66]
        #starsPosY = [0.46,0.46,0.46,0.46,0.46,0.46,0.46,0.46,0.46,0.46,
        #0.41,0.41,0.41,0.41,0.41,0.41,0.41,0.41,0.41,0.41]
        #
        #
        #def makeStars(starCounts,starsPosX,starsPosY):
        #    stars=[]
        #    for i in range(starCounts):
        #        star = visual.ShapeStim(
        #        win=win, name='polygon', vertices='star7',
        #        size=(0.05, 0.05),ori=0.0,
        #        pos=(starsPosX[i], starsPosY[i]),
        #        anchor='center',lineWidth=1.0,
        #        colorSpace='rgb',  lineColor='gold',
        #        fillColor='yellow',opacity=None, depth=-4.0,
        #        interpolate=True)
        #        stars.append(star)
        #    return stars
        #
        #
        #
        #def drawStars(stars):
        #    for each in stars:
        #        each.draw()
        #
      Begin Routine:
        # may a list to store the images they click
        clickables = productImages
        # clikedImages is the imageStim object, clickedImageName is the corresponding
        # name. This is the final list. allClickedImageName are all the product they
        # ever clicked, including those put into the cart but remove later, the clicked
        # back is remomved for now,so remove the variable for now 04/2022
        clickedImages = []
        clickedImagesName=[]
        clickedImagesTime=[]
        correctClickedsName=[]
        correctClickedsTime=[]
        # allClickedImagesName=[]
        clickedImage = None
        curIncorrectCount=0
        curCorrectCount=0
        curStarCount=starCounts

        cartPosX = [0.10,0.19,0.28,0.37,0.46,
        0.10,0.19,0.28,0.37,0.46,
        0.10,0.19,0.28,0.37,0.46]
        cartPosY = [-0.34,-0.34,-0.34,-0.34,-0.34,
        -0.42,-0.42,-0.42,-0.42,-0.42,
        -0.34,-0.34,-0.34,-0.34,-0.34]
      Each Frame:
        #collect the cliked image and make the copy and calculat the correct and incorrect clicked
        for clickable in clickables:
             if  clickable.contains(imageMouse2):
        #     if imageMouse2.isPressedIn(clickable):
                if clickedImage == None:
                    clickedImage = copyImage(clickable,
                            (cartPosX[0],cartPosY[0]),
                            clickable.name,0.07)
                    clickedImages.append(clickedImage)
                    clickedImagesName.append(clickedImage.name)
                    clickedImagesTime.append(t)
                    # allClickedImagesName.append(clickedImage.name)
                    cartPosX.pop(0)
                    cartPosY.pop(0)
                    #this is to collect the correct and incorrect response and mark the correct on the template
                    if clickable.name in curCorrectImages:
                        correctSound.stop()
                        wrongSound.stop()
                        correctSound.play()
                        correctClickedsName.append(clickable.name)
                        correctClickedsTime.append(t)
                        correctCount +=1
                        curCorrectCount +=1
                        # remove the already clicked correct image so it can be count as two correct
                        curCorrectImages.remove(clickable.name)
                        shopImages[correctImages.index(clickable.name)].mask='image\cross.jpg'
                    else:
                        correctSound.stop()
                        wrongSound.stop()
                        wrongSound.play()
                        incorrectCount +=1
                        curIncorrectCount +=1
                    #this is to count the stars
                    if starCounts+curCorrectCount-curIncorrectCount<0:
                        curStarCount = 0
                        starCounts = 0
                        curIncorrectCount = 0
                        curCorrectCount =0
                    else:
                        curStarCount = starCounts+curCorrectCount-curIncorrectCount
                    #this line reset the mouse pos so it is not stay in the same place
                    imageMouse2.setPos(newPos=(-0.5,0.4))
                    break
                else:
                    #this line reset the mouse pos so it is not stay in the same place
                    imageMouse2.setPos(newPos=(-0.5, 0.4))
                    break
        else:
            if clickedImage is not None:
                clickedImage = None




        #prevent the moouse collecting the same click accross frames
        #if clickedImage is not None and imageMouse.getPressed()[0] == 0:
        #    clickedImage = None

        drawClicked(clickedImages)
        stars=makeStars(curStarCount,starsPosX,starsPosY)
        drawStars(stars)

        if correctCount >=6:
            continueRoutine = False
  Routine trialFeedback
    CodeComponent makeFeedback
      Code Type = Py
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      Begin Experiment:
        trialFeedback=""
      Begin Routine:
        if realOrNot ==1:
            totalStars = totalStars + starCounts

        if starCounts >0:
            trialFeedback="Great! You win %i sticker.\n Lets try another trial "%(starCounts)
        else:
            trialFeedback="Sorry, you didn't win any sticker.\n Lets try another trial "
    KeyboardComponent trialFeedBackPress
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MovieComponent goodJobV
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = image/goodJob.mp4
      pos = (0, 0.2)
      size = [0.4,0.3]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    ImageComponent goodJobI
      image = image/goodJob.jpg
      pos = (0, 0.2)
      size = (0.4, 0.3)
      startVal [time (s)] = 2.1
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    TextComponent trialFeedBackText
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialFeedback
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    TextComponent totalStarsCount
      disabled = True
      letterHeight = 0.02
      pos = (-0.7,0.48)
      startVal [time (s)] = 0.0
      text [set every frame] = $totalStars
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    CodeComponent endBlock
      Code Type = Auto->JS
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      Each Frame:
        if event.getKeys(['p']):
          continueRoutine = False
          multipleTrials.finished = 1
  Routine expEnd
    CodeComponent expFeedback
      Code Type = Py
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      Begin Experiment:
        expFeedback=""
      Begin Routine:
        expFeedback ="You have done all the shopping.\n You win %i sticker in total. "%(totalStars)
    KeyboardComponent endExp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent expFeedbackText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $expFeedback
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  Routine justStore
    ImageComponent shoppingbasket_3
      image = image/basket.png
      pos = (0.28, -0.42)
      size = (0.5, 0.14)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf5_2
      image = image/shelf1.png
      pos = (0.475, 0.32)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf5_1
      image = image/shelf1.png
      pos = (0.16, 0.32)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf1_1
      image = image/shelf1.png
      pos = (0.16, 0.19)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf1_2
      image = image/shelf1.png
      pos = (0.475, 0.19)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf2_1
      image = image/shelf1.png
      pos = (0.16, 0.06)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf2_2
      image = image/shelf1.png
      pos = (0.475, 0.06)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf3_1
      image = image/shelf1.png
      pos = (0.16, -.07)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf3_2
      image = image/shelf1.png
      pos = (0.475, -.07)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf4_1
      image = image/shelf1.png
      pos = (0.16, -.2)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent SmallShelf4_2
      image = image/shelf1.png
      pos = (0.475, -.2)
      size = (0.3, 0.05)
      startVal [time (s)] = 0.0
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    ImageComponent shelf1_3
      disabled = True
      image = image/shelf.png
      pos = (0.42, 0.27)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent shelf2_3
      disabled = True
      image = image/shelf.png
      pos = (0.42, 0.12)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent shelf3_3
      disabled = True
      image = image/shelf.png
      pos = (0.42, -0.03)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent shelf4_3
      disabled = True
      image = image/shelf.png
      pos = (0.42, -0.18)
      size = (0.8, 0.1)
      startVal [time (s)] = 0.0
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    ImageComponent shopper_2
      image [set every repeat] = $storeShopperImage
      pos [set every repeat] = (storeShopperPosX, storeShopperPosY)
      size [set every repeat] = (storeShopperSizeW, storeShopperSizeH)
      startVal [time (s)] = 0.0
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    ImageComponent kid_2
      image = image/kidSmall.png
      pos = (0.01, -0.42)
      size = (0.05, 0.11)
      startVal [time (s)] = 0.0
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    MouseComponent shopperMouse_2
      clickable = shopper
      disabled = True
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent drawShelfStim_2
      Code Type = Auto->JS
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      Begin Routine:
        for image in productImages:
            image.setAutoDraw(True)
      End Routine:
        for image in productImages:

            image.setAutoDraw(False)

        #for image in clickedImages:
        #    image.setAutoDraw(False)
        #for image in shopImages:
        #    image.setAutoDraw(False)

        #for clicked in everyClicked:
        #    clicked.setAutoDraw(False)
    CodeComponent drawStar_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        for star in stars:
            star.setAutoDraw(True)
      End Routine:
        for star in stars:
            star.setAutoDraw(False)
    MouseComponent imageMouse_2
      clickable = shopper_2
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ButtonComponent endTrialButton_2
      bold = False
      borderColor = -1.0000, -1.0000, -1.0000
      borderWidth = 2
      callback = oneTrial.finished=True
      color = black
      disabled = True
      fillColor = 0.0902, -1.0000, -1.0000
      forceEndRoutine = True
      letterHeight = 0.035
      pos = (-0.6, -0.45)
      size = (0.16, 0.1)
      startVal [time (s)] = 0
      text = Done  shoping
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    CodeComponent clickResponse_2
      Code Type = Py
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      Begin Experiment:
        def copyImage(image, pos, name, size):
            return visual.ImageStim(win,
                name=name, image=image.image, mask=image.mask,
                anchor=image.anchor, ori = image.ori, size=size,
                pos=pos,color=image.color, colorSpace=image.colorSpace,
                opacity=image.opacity,flipHoriz=image.flipHoriz,
                flipVert=image.flipVert,texRes=image.texRes,
                interpolate=image.interpolate, depth=image.depth)



        def drawClicked(clicked):
            for each in clicked:
                each.draw()

        starsPosX = [0.12,0.18,0.24,0.30,0.36,0.42,0.48,0.54,0.60,0.66,
        0.12,0.18,0.24,0.30,0.36,0.42,0.48,0.54,0.60,0.66]
        starsPosY = [0.46,0.46,0.46,0.46,0.46,0.46,0.46,0.46,0.46,0.46,
        0.41,0.41,0.41,0.41,0.41,0.41,0.41,0.41,0.41,0.41]


        def makeStars(starCounts,starsPosX,starsPosY):
            stars=[]
            for i in range(starCounts):
                star = visual.ShapeStim(
                win=win, name='polygon', vertices='star7',
                size=(0.05, 0.05),ori=0.0,
                pos=(starsPosX[i], starsPosY[i]),
                anchor='center',lineWidth=1.0,
                colorSpace='rgb',  lineColor='gold',
                fillColor='yellow',opacity=None, depth=-4.0,
                interpolate=True)
                stars.append(star)
            return stars



        def drawStars(stars):
            for each in stars:
                each.draw()
      Begin Routine:
        imageMouse.setPos(newPos = (-0.5,0.4))
        # may a list to store the images they click
        #clickables = productImages
        # clikedImages is the imageStim object, clickedImageName is the corresponding
        # name. This is the final list. allClickedImageName are all the product they
        # ever clicked, including those put into the cart but remove later, the clicked
        # back is remomved for now,so remove the variable for now 04/2022
        clickedImages = []
        clickedImagesName=[]
        clickedImagesTime=[]
        correctClickedsName=[]
        correctClickedsTime=[]
        # allClickedImagesName=[]
        clickedImage = None
        curIncorrectCount=0
        curCorrectCount=0
        curStarCount=starCounts

        #for item in clickedImages:
        #        pair_label = item.pair
        #        clickables = [item for item in clickables if item.pair != pair_label]

        cartPosX = [0.10,0.19,0.28,0.37,0.46,
        0.10,0.19,0.28,0.37,0.46,
        0.10,0.19,0.28,0.37,0.46,
        0.10,0.19,0.28,0.37,0.46,]
        cartPosY = [-0.34,-0.34,-0.34,-0.34,-0.34,
        -0.42,-0.42,-0.42,-0.42,-0.42,
        -0.34,-0.34,-0.34,-0.34,-0.34,
        -0.42,-0.42,-0.42,-0.42,-0.42]
      Each Frame:
        #collect the cliked image and make the copy and calculat the correct and incorrect clicked
        #here the logic is that if the mouse is press (new or lingeringone) in any clickable,
        #it break the for loop. And if all the clickable is not click, then clear out the clickedImage.
        #So it prevent it from collect the same click across frames.
        #NEW

        for clickable in clickables:
            if clickable.contains(imageMouse):
                #clickables.remove(clickable)
                #pair_label = clickable.pair
                #clickables = [item for item in clickables if item.pair != pair_label]
                #if clickable in shopImages: #Tried doing this to get rid of sticky image. No luck
                    #shopImages.remove(clickable)

        #     if imageMouse.isPressedIn(clickable):
                if clickedImage == None:
                    clickedImage = copyImage(clickable,
                                (cartPosX[0],cartPosY[0]),
                                clickable.name,0.07)
                    clickedImages.append(clickedImage)
                    # clickedImagesName are the images that art in the basket, if inclued
                    # once the click on the selved and remove those click back, the click back
                    # function is disable currently 04/2022
                    clickedImagesName.append(clickedImage.name)
                    clickedImagesTime.append(t)
                    # allClickedImagesName.append(clickedImage.name)
                    cartPosX.pop(0)
                    cartPosY.pop(0)
                    #this is to collect the correct and incorrect response and mark the correct on the template
                    if clickable.name in curCorrectImages:
                        correctSound.stop()
                        wrongSound.stop()
                        correctSound.play()
                        #correctClickedsName.append(clickable.name)
                        #correctClickedsTime.append(t)
                        #correctCount +=1
                        # print(correctCount)
                        curCorrectCount +=1
                        # remove the already clicked correct image so it can't be count as two correct
                        #curCorrectImages.remove(clickable.name)
                        #shopImages[correctImages.index(clickable.name)].mask='image\cross.jpg'
                    else:
                        correctSound.stop()
                        wrongSound.stop()
                        wrongSound.play()
                        #incorrectCount +=1
                        curIncorrectCount +=1
                    #this is to count the stars
                    if starCounts+curCorrectCount-curIncorrectCount<0:
                        curStarCount = 0
                        starCounts = 0
                        curIncorrectCount = 0
                        curCorrectCount =0
                    else:
                        curStarCount = starCounts+curCorrectCount-curIncorrectCount
                    #this line reset the mouse pos so it is not stay in the same place
                    imageMouse.setPos(newPos=(-0.5,0.4))
                    break
                else:
                    #this line reset the mouse pos so it is not stay in the same place
                    imageMouse.setPos(newPos=(-0.5,0.4))
                    break
        else:
            if clickedImage is not None:
                clickedImage = None





        ## prevent the mouse collecting the same click accross frames
        #if clickedImage is not None and imageMouse.getPressed()[0] == 0:
        #    clickedImage = None

        ##remove image from the cart if it is clicked and also free up the space
        #for cartIndex, cartImage in enumerate(clickedImages):
        ##    if  clickImage.contains(imageMouse):
        #     if imageMouse.isPressedIn(cartImage):
        #        cartPosX.insert(0,cartImage.pos[0])
        #        cartPosY.insert(0,cartImage.pos[1])
        #        clickedImages.pop(cartIndex)
        #        clickedImagesName.remove(cartImage.name)

        drawClicked(clickedImages)
        stars=makeStars(curStarCount,starsPosX,starsPosY)
        drawStars(stars)

        if correctCount >=6:
            continueRoutine = False
            delayDuration =0
            oneTrial.finished=True


        if  shopper_2.contains(imageMouse_2):
            continueRoutine = False
  Routine finalQ
    ImageComponent sMarket
      image = image/longDelay.jpg
      pos [set every repeat] = (0, finalQSMY)
      size = (0.75, 0.26)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $finalQduration
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    ImageComponent cStore
      image = image/nodelay.jpg
      pos [set every repeat] = (0, finalQCSY)
      size = (0.26, 0.26)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $finalQduration
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    KeyboardComponent endQ
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $finalQduration
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Flow
  Routine loading
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = $"blockOrder"+expInfo['order']+"5.2.csv"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine blockBegin
    LoopInitiator multipleTrials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine trialBegin
      Routine initializeNewTrial
      Routine justStore
      Routine mask
      LoopInitiator oneTrial loopType="TrialHandler"
        loopType = sequential
        nReps = repeatTimes
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        Routine template
        Routine working
        Routine mask
      LoopTerminator oneTrial
      Routine trialFeedback
    LoopTerminator multipleTrials
    Routine finalQ
  LoopTerminator block
  Routine expEnd
